section int SourceCh= 64
section floatlist SourceChGain= 64 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 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0.008 0.008 0.008 0.008
section floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0
section stringlist ChannelNames= 64 FC5 FC3 FC1 FCz FC2 FC4 FC6 C5 C3 C1 Cz C2 C4 C6 CP5 CP3 CP1 CPz CP2 CP4 CP6 Fp1 Fpz Fp2 AF7 AF3 AFz AF4 AF8 F7 F5 F3 F1 Fz F2 F4 F6 F8 FT7 FT8 T7 T8 T9 T10 TP7 TP8 P7 P5 P3 P1 Pz P2 P4 P6 P8 PO7 PO3 POz PO4 PO8 O1 Oz O2 Iz 
section stringlist TransmitChList= 64 FC5 FC3 FC1 FCz FC2 FC4 FC6 C5 C3 C1 Cz C2 C4 C6 CP5 CP3 CP1 CPz CP2 CP4 CP6 Fp1 Fpz Fp2 AF7 AF3 AFz AF4 AF8 F7 F5 F3 F1 Fz F2 F4 F6 F8 FT7 FT8 T7 T8 T9 T10 TP7 TP8 P7 P5 P3 P1 Pz P2 P4 P6 P8 PO7 PO3 POz PO4 PO8 O1 Oz O2 Iz 
