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Storage:Data%20Location:DataIOFilter string DataDirectory= ../data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= test Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256 256Hz 1 % // sample rate
Source:SignalGeneratorADC list SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
Source:SignalGeneratorADC list SourceChGain= 16 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 
Source:SignalGeneratorADC list ChannelNames= 0 
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 0 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 0 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 60muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= StimulusType StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:P3TemporalFilter int EpochLength= 400ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 2 1 0 % // Number of epochs to average
Filtering:P3TemporalFilter int SingleEpochMode= 0 0 0 1 // Report result after each epoch (boolean)
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Visualize:P3TemporalFilter int TargetERPChannel= 1 1 % % // Input channel for which to display ERP data
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } SpatialFilter 2.A P3TemporalFilter 2.B LinearClassifier 2.C // SignalProcessing filter chain (noedit)(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 2s 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 1/2s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 3/4s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 125ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask string EarlyOffsetExpression= % // abort stimulus if this expression becomes true
Application:Sequencing:StimulusTask float ISIMinDuration= 125ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 125ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 1 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Result%20Processing:StimulusTask int AccumulateEvidence= 0 0 0 1 // accumulate evidence until a selection is made (boolean)
Application:Result%20Processing:StimulusTask float MinimumEvidence= 0 0 0 % // do not make a selection unless target evidence exceeds this value. For a normalized classifier, MinimumEvidence approximates -2.3*log10(Error Probability)
Application:Sequencing:ERPSpellerTask int NumberOfSequences= 2 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets:ERPSpellerTask matrix TargetDefinitions= 7 { Display } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } A A<GTO7> 1 % % B B<GTO7> 1 % % C C<GTO7> 1 % % D D<GTO7> 1 % % E E<GTO7> 1 % % F F<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } G G<GTO7> 1 % % H H<GTO7> 1 % % I I<GTO7> 1 % % J J<GTO7> 1 % % K K<GTO7> 1 % % L L<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } M M<GTO7> 1 % % N N<GTO7> 1 % % O O<GTO7> 1 % % P P<GTO7> 1 % % Q Q<GTO7> 1 % % R R<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } S S<GTO7> 1 % % T T<GTO7> 1 % % U U<GTO7> 1 % % V V<GTO7> 1 % % W W<GTO7> 1 % % X X<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } Y Y<GTO7> 1 % % Z Z<GTO7> 1 % % 1 1<GTO7> 1 % % 2 2<GTO7> 1 % % 3 3<GTO7> 1 % % 4 4<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } 5 5<GTO7> 1 % % 6 6<GTO7> 1 % % 7 7<GTO7> 1 % % 8 8<GTO7> 1 % % 9 9<GTO7> 1 % % _ _<GTO7> 1 % % } { matrix 6 { Display Enter Display%20Size Icon%20File Sound%20File } A-F <GTO1> 0.5 % % G-L <GTO2> 0.5 % % M-R <GTO3> 0.5 % % S-X <GTO4> 0.5 % % Y-4 <GTO5> 0.5 % % 5-_ <GTO6> 0.5 % % } // speller target properties
Application:Speller%20Targets:ERPSpellerTask intlist NumMatrixColumns= 7 3 3 3 3 3 3 3 6 1 % // display matrices' column number(s)
Application:Speller%20Targets:ERPSpellerTask intlist NumMatrixRows= 7 2 2 2 2 2 2 2 6 0 % // display matrices' row number(s)
Application:Audio%20Stimuli:ERPSpellerTask int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli:ERPSpellerTask matrix AudioStimuliRowsFiles= 6 { filename } sounds/1.wav sounds/2.wav sounds/3.wav sounds/4.wav sounds/5.wav sounds/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli:ERPSpellerTask matrix AudioStimuliColsFiles= 6 { filename } sounds/a.wav sounds/b.wav sounds/c.wav sounds/d.wav sounds/e.wav sounds/f.wav // audio stimuli column files 
Application:Speller%20Targets:ERPSpellerTask floatlist TargetWidth= 1 16 0 0 100 // target width in percent of screen width
Application:Speller%20Targets:ERPSpellerTask floatlist TargetHeight= 1 14 0 0 100 // target height in percent of screen height
Application:Speller%20Targets:ERPSpellerTask floatlist TargetTextHeight= 1 12 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets:ERPSpellerTask stringlist BackgroundColor= 1 0x00000000 0x505050 % % // target background color (color)
Application:Speller%20Targets:ERPSpellerTask stringlist TextColor= 1 0x00555555 0x505050 % % // text color (color)
Application:Speller%20Targets:ERPSpellerTask stringlist TextColorIntensified= 1 0x00FFFFFF 0x505050 % % // intensified text color (color)
Application:Speller%20Targets:ERPSpellerTask intlist IconHighlightMode= 1 1 1 0 4 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets:ERPSpellerTask floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller:ERPSpellerTask int FirstActiveMenu= 7 1 1 % // Index of first active menu
Application:Speller:ERPSpellerTask float StatusBarSize= 10 0 0 100 // size of status bar in percent of screen height
Application:Speller:ERPSpellerTask float StatusBarTextHeight= 4 0 0 100 // size of status bar text in percent of screen height
Application:Speller:ERPSpellerTask string TextToSpell= % // character or string to spell in offline copy mode
Application:Speller:ERPSpellerTask string TextResult= % // user spelling result
Application:Speller:ERPSpellerTask int TestMode= 1 0 0 1 // select targets by clicking on their associated stimuli (0=no, 1=yes) (boolean)
Application:Speller:ERPSpellerTask string DestinationAddress= % // network address for speller output in IP:port format
Application:Text%20Window:ERPSpellerTask int TextWindowEnabled= 0 0 0 1 // Show Text Window (0=no, 1=yes) (boolean)
Application:Text%20Window:ERPSpellerTask int TextWindowLeft= 600 0 0 % // Text Window X location
Application:Text%20Window:ERPSpellerTask int TextWindowTop= 5 0 0 % // Text Window Y location
Application:Text%20Window:ERPSpellerTask int TextWindowWidth= 512 512 0 % // Text Window Width
Application:Text%20Window:ERPSpellerTask int TextWindowHeight= 512 512 0 % // Text Window Height
Application:Text%20Window:ERPSpellerTask string TextWindowFontName= Courier // Text Window Font Name
Application:Text%20Window:ERPSpellerTask int TextWindowFontSize= 10 4 1 % // Text Window Font Size
Application:Text%20Window:ERPSpellerTask string TextWindowFilePath= % // Path for Saved Text File (directory)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German German } { TIME%20OUT%20!!! TIME%20OUT%20!!! Waiting%20to%20start%20... Sleeping--Select%20SLEEP%20twice%20to%20resume Select%20SLEEP%20once%20more%20to%20resume Paused--Select%20PAUSE%20again%20to%20resume } Angehalten:%20Noch%20einmal%20PAUSE%20fur%20Weiter % % % % % % % % % % % // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 ERPSpellerTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
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System:Randomization int RandomSeed= 31950 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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