Application:Gauges:GaugeApp matrix Gauges= 4 { caption type xpos ypos width height other } Ball           xy       .05 .05 .4 .4 { matrix 6 2 signal1 BallXPosTimes10000/10000   min1  0    max1     1 signal2 BallYPosTimes10000/10000   min2 0 max2     1 } Paddle         xy       .55 .55 .4 .4 { matrix 6 2 signal1 PaddleXPosTimes10000/10000 min1  0    max1     1 signal2 PaddleYPosTimes10000/10000 min2 0 max2     1 } Left%20Eye     xy       .05 .55 .4 .4 { matrix 6 2 signal1 EyetrackerLeftEyeGazeX     min1  0    max1 65535 signal2 EyetrackerLeftEyeGazeY     min2 0 max2 65535 } Right%20Eye    xy       .55 .05 .4 .4 { matrix 6 2 signal1 EyetrackerRightEyeGazeX    min1  0    max1 65535 signal2 EyetrackerRightEyeGazeY    min2 0 max2 65535 }
Application:Gauges:GaugeApp float  UpdateTime= 20ms // The time which elapses between gauge updates. 
