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Source:Signal%20Properties:DataIOFilter int SourceCh= 4 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 4 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 4 0.008 0.008 0.008 0.008 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= test Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Storage:Documentation:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 3 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 9Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 100muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int RandomSeed= 0 0 0 1 // Initialization value for random number generator (initialize from time if 0)
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
Source:Log%20Input:KeyLogger int LogMouse= 1 0 0 1 // record mouse to states (boolean)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 NullFileWriter 1 SignalGeneratorADC 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (as a fraction of sampling rate or in Hz)
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (as a fraction of sampling rate or in Hz)
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins (as a fraction of sampling rate or in Hz)
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 2 4 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter matrix Expressions= 0 0 % % % // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 3 190 160 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 3 0.02 0.02 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 3 2 2 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 % % % % // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 4s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= % // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
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Application:Window:ApplicationBase int WindowWidth= 1280 640 0 % // width of application window
Application:Window:ApplicationBase int WindowHeight= 800 480 0 % // height of application window
Application:Window:ApplicationBase int WindowLeft= 0 0 % % // screen coordinate of application window's left edge
Application:Window:ApplicationBase int WindowTop= 0 0 % % // screen coordinate of application window's top edge
Application:Gauges%20Window:ApplicationWindow int GaugesWindowWidth= 1100 640 0 % // width of Gauges window
Application:Gauges%20Window:ApplicationWindow int GaugesWindowHeight= 800 480 0 % // height of Gauges window
Application:Gauges%20Window:ApplicationWindow int GaugesWindowLeft= 0 0 % % // screen coordinate of Gauges window's left edge
Application:Gauges%20Window:ApplicationWindow int GaugesWindowTop= 0 0 % % // screen coordinate of Gauges window's top edge
Application:Gauges%20Window:ApplicationWindow string GaugesWindowBackgroundColor= 0xFFFFFF 0x505050 % % // Gauges window background color (color)
Application:Window:GenericStimulusTask string WindowBackgroundColor= 0x808080 0x505050 % % // background color (color)
Application:Gauges:GaugeApp matrix Gauges= 12 { caption type xpos ypos width height other } AnalogX analog .05 .05 .15 .15 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } AnalogY analog .82 .05 .15 .15 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } HistoryX history .205 .05 .59 .2 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } HistoryY history .205 .255 .59 .2 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } ScrollingX shistory .205 .555 .59 .2 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } ScrollingY shistory .205 .755 .59 .2 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } BarX bar .05 .255 .1 .3 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } BarY bar .82 .255 .1 .3 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } XY xy .05 .6 .15 .15 { matrix 6 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 } XY xy .82 .6 .15 .15 { matrix 6 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 } HistogramX histogram .05 .8 .15 .15 { matrix 4 2 signal1 MousePosX min1 32768 max1 34048 numbars 9 } HistogramY histogram .82 .8 .15 .15 { matrix 4 2 signal1 MousePosY min1 33568 max1 32768 numbars 9 } // Parameterization of Gauges 
Application:Gauges:GaugeApp matrix Gauges= 12 { caption type xpos ypos width height other } AnalogX analog .05 .05 .15 .15 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } AnalogY analog .82 .05 .15 .15 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } HistoryX history .205 .05 .59 .2 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } HistoryY history .205 .255 .59 .2 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } ScrollingX shistory .205 .555 .59 .2 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } ScrollingY shistory .205 .755 .59 .2 { matrix 7 2 signal1 MousePosY min1 33568 max1 32768  qmin1 0.99 qmax1 0.01 showscale 1 format %%%205g } BarX bar .05 .255 .1 .3 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } BarY bar .82 .255 .1 .3 { matrix 5 2 signal1 MousePosY qmin1 0.99 qmax1 0.01 showscale 1 format %%%205g } XY xy .05 .6 .15 .15 { matrix 6 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 } XY xy .82 .6 .15 .15 { matrix 6 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 } HistogramX histogram .05 .8 .15 .15 { matrix 4 2 signal1 MousePosX min1 32768 max1 34048 numbars 9 } HistogramY histogram .82 .8 .15 .15 { matrix 4 2 signal1 MousePosY min1 33568 max1 32768 numbars 9 } // Parameterization of Gauges 
Application:Gauges:GaugeApp matrix Gauges= 12 { caption type xpos ypos width height other } AnalogX analog .05 .05 .15 .15 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } AnalogY analog .82 .05 .15 .15 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } HistoryX history .205 .05 .59 .2 { matrix 7 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY qmin2 0.01 qmax2 0.99 color2 0x00FF00 } HistoryY history .205 .255 .59 .2 { matrix 3 2 signal1 MousePosY min1 33568 max1 32768 } ScrollingX shistory .205 .555 .59 .2 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } ScrollingY shistory .205 .755 .59 .2 { matrix 11 2 signal1 MousePosY  qmin1 0.99 qmax1 0.01 showscale 1 format %%%205g signal2 MousePosX min2 32768 max2 34048 qmin2 0.01 qmax2 0.99 color2 0xFF0000 } BarX bar .05 .255 .1 .3 { matrix 3 2 signal1 MousePosX min1 32768 max1 34048 } BarY bar .82 .255 .1 .3 { matrix 5 2 signal1 MousePosY qmin1 0.99 qmax1 0.01 showscale 1 format %%%205g } XY xy .05 .6 .15 .15 { matrix 13 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 signal4 MousePosX min4 32768 max4 34048 signal3 MousePosY min3 33568 max3 32768 color4 0xFF0000 } XY xy .82 .6 .15 .15 { matrix 6 2 signal1 MousePosX min1 32768 max1 34048 signal2 MousePosY min2 33568 max2 32768 } HistogramX histogram .05 .8 .15 .15 { matrix 4 2 signal1 MousePosX min1 32768 max1 34048 numbars 9 } HistogramY histogram .82 .8 .15 .15 { matrix 4 2 signal1 MousePosY min1 33568 max1 32768 numbars 9 } // Parameterization of Gauges 
Application:Gauges:GaugeApp float UpdateTime= 100ms 100ms 0 % // The time which elapses between gauge updates. 
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 GaugeApp 3 ConnectorOutput 3.9999 // Application filter chain
